PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  color = black
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'gender': u'', u'age': u'', u'participant': u''}
  expName = MTS - OtM 3x3
  logging level = warning
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    CodeComponent trial_code
      Begin Experiment:
        # Dependencies
        import random

        # Declare variable for pass/fail training
        passed_training = False
      Begin Routine:
        # Set target stimuli categories
        # Location of the required category is set by the required response.
        # Location of the two incorrect categories is randomised.
        if required_response == 'left':  # left from block_layout.xlsx
            target_category_left = target_category_required  # latter from block_layout.xlsx
            i = [target_category_wrong_1, target_category_wrong_2]
            random.shuffle(i)
            target_category_middle = i.pop()
            target_category_right = i.pop()
        elif required_response == 'down':
            target_category_middle = target_category_required
            i = [target_category_wrong_1, target_category_wrong_2]
            random.shuffle(i)
            target_category_left = i.pop()
            target_category_right = i.pop()
        elif required_response == 'right':
            target_category_right = target_category_required
            i = [target_category_wrong_1, target_category_wrong_2]
            random.shuffle(i)
            target_category_left = i.pop()
            target_category_middle = i.pop()

        # Set specific stimuli based on categories
        # Translate a1 etc into actual exemplars from the stimuli.xlsx file
        #sample
        if sample_category == 'a1':
            sample = a1_exemplar
        elif sample_category == 'a2':
            sample = a2_exemplar
        elif sample_category == 'a3':
            sample = a3_exemplar
        elif sample_category == 'b1':  # I include B and C classes for generalisation to an equivalence task
            sample = b1_exemplar
        elif sample_category == 'b2':
            sample = b2_exemplar
        elif sample_category == 'b3':
            sample = b3_exemplar
        elif sample_category == 'c1':
            sample = c1_exemplar
        elif sample_category == 'c2':
            sample = c2_exemplar
        elif sample_category == 'c3':
            sample = c3_exemplar

        #target left
        if target_category_left == 'b1':
            target_left = b1_exemplar
        elif target_category_left == 'b2':
            target_left = b2_exemplar
        elif target_category_left == 'b3':
            target_left = b3_exemplar
        elif target_category_left == 'c1':
            target_left = c1_exemplar
        elif target_category_left == 'c2':
            target_left = c2_exemplar
        elif target_category_left == 'c3':
            target_left = c3_exemplar

        #target middle
        if target_category_middle == 'b1':
            target_middle = b1_exemplar
        elif target_category_middle == 'b2':
            target_middle = b2_exemplar
        elif target_category_middle == 'b3':
            target_middle = b3_exemplar
        elif target_category_middle == 'c1':
            target_middle = c1_exemplar
        elif target_category_middle == 'c2':
            target_middle = c2_exemplar
        elif target_category_middle == 'c3':
            target_middle = c3_exemplar

        #target right
        if target_category_right == 'b1':
            target_right = b1_exemplar
        elif target_category_right == 'b2':
            target_right = b2_exemplar
        elif target_category_right == 'b3':
            target_right = b3_exemplar
        elif target_category_right == 'c1':
            target_right = c1_exemplar
        elif target_category_right == 'c2':
            target_right = c2_exemplar
        elif target_category_right == 'c3':
            target_right = c3_exemplar
      End Routine:
        # Adjust feedback and counters based on response
        if response.corr == True:
            message = 'Correct'
            message_color = 'lime'
            correct_in_a_row += 1  # advance counter
        elif response.corr == False:
            message = 'Wrong'
            message_color = 'red'
            correct_in_a_row = 0  # reset counter

        # save variables to the experiment handler to be written to the data file
        thisExp.addData('sample', sample)
        thisExp.addData('target_left', target_left)
        thisExp.addData('target_middle', target_middle)
        thisExp.addData('target_right', target_right)
        thisExp.addData('correct_in_a_row', correct_in_a_row)
    TextComponent sample_box
      text [set every repeat] = $sample
      pos = [0, 0.3]
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    TextComponent target_left_box
      text [set every repeat] = $target_left
      pos = [-.5, -.3]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent target_middle_box
      text [set every repeat] = $target_middle
      pos = [0, -.3]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    TextComponent target_right_box
      text [set every repeat] = $target_right
      pos = [.5, -.3]
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent response
      correctAns = $required_response
      storeCorrect = True
      forceEndRoutine = True
      allowedKeys = 'left', 'down', 'right'
      startVal [time (s)] = 1
      store = first key
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  Routine end
    CodeComponent end_code
      Begin Routine:
        # adjust end message
        if passed_training == True:
            end_message = 'PASSED \n\nEnd of task'
        elif passed_training == False:
            end_message = 'FAILED \n\nEnd of task'
    TextComponent end_box
      text [set every repeat] = $end_message
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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    KeyboardComponent end_resp
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.5
      store = nothing
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  Routine feedback
    TextComponent feedback_box
      color [set every repeat] = $message_color
      text [set every repeat] = $message
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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  Routine postblock
    CodeComponent postblock_code
      End Routine:
        # End loops if mastery criterion was met
        if correct_in_a_row >= mastery_criterion:
            passed_training = True
            blocks_loop.finished = True
            trials_loop.finished = True

        thisExp.addData('passed_training', passed_training)
  Routine instructions
    CodeComponent inst_code
      Begin Routine:
        # reset counter
        correct_in_a_row = 0
    TextComponent inst_box
      startVal [time (s)] = 0.5
      letterHeight = 0.1
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      text:
        Learn to respond correctly to the words presented on screen.

        Use the up (left word), down (middle word), and right (right word) keys.

        Press any key to continue.
    KeyboardComponent inst_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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Flow
  LoopInitiator blocks_loop loopType="TrialHandler"
    conditionsFile = stimuli.xlsx
    isTrials = False
    loopType = sequential
    nReps = 12
    conditions = [{u'a1': u'CUG', u'a3': u'PIM', u'a2': u'VEK', u'b1': u'DEV', u'b2': u'BRU', u'b3': u'IKA', u'c3': u'ORT', u'c2': u'TIV', u'c1': u'NAR'}]
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    Routine instructions
    LoopInitiator trials_loop loopType="TrialHandler"
      conditionsFile = block_layout.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{u'target_middle': u'b3', u'sample': u'a1', u'trial_description': u'ab', u'required_response': u'left', u'target_right': u'b2', u'target_left': u'b1'},
        {u'target_middle': u'b1', u'sample': u'a1', u'trial_description': u'ab', u'required_response': u'down', u'target_right': u'b3', u'target_left': u'b2'},
        {u'target_middle': u'b2', u'sample': u'a1', u'trial_description': u'ab', u'required_response': u'right', u'target_right': u'b1', u'target_left': u'b3'},
        {u'target_middle': u'b1', u'sample': u'a2', u'trial_description': u'ab', u'required_response': u'left', u'target_right': u'b3', u'target_left': u'b2'},
        {u'target_middle': u'b2', u'sample': u'a2', u'trial_description': u'ab', u'required_response': u'down', u'target_right': u'b1', u'target_left': u'b3'},
        {u'target_middle': u'b3', u'sample': u'a2', u'trial_description': u'ab', u'required_response': u'right', u'target_right': u'b2', u'target_left': u'b1'},
        {u'target_middle': u'b2', u'sample': u'a3', u'trial_description': u'ab', u'required_response': u'left', u'target_right': u'b1', u'target_left': u'b3'},
        {u'target_middle': u'b3', u'sample': u'a3', u'trial_description': u'ab', u'required_response': u'down', u'target_right': u'b2', u'target_left': u'b1'},
        {u'target_middle': u'b1', u'sample': u'a3', u'trial_description': u'ab', u'required_response': u'right', u'target_right': u'b3', u'target_left': u'b2'}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
      Routine trial
      Routine feedback
    LoopTerminator trials_loop
    LoopInitiator postblock_loop loopType="TrialHandler"
      loopType = sequential
      nReps = 1
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      Routine postblock
    LoopTerminator postblock_loop
  LoopTerminator blocks_loop
  Routine end
